PsychoPy2experiment version="2021.1.2"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=8697B8A4
  Experiment info = {'participant': '', 'version': '1', 'PROLIFIC_PID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = VWM
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Routines
  Routine encoding_real_start
    CodeComponent encoding_start_code
      Code Type = Auto->JS
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      Begin Routine:
        # Need to set a trial counter because psychopy one isn't working for me
        TRIAL_N = 0
      Each Frame:
        if 'practice' in encoding_file:
            print("We are in practice file")
            continueRoutine = False
        else:
            print("We are in a real file")
            continueRoutine = True
    TextComponent encoding_start_text
      color = $basecol
      font = cambria
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have finished the practice section. In the real section you do not get feedback, but everything else is the same.

        Press [SPACE] to begin the main section.
    TextComponent buttons_reminder
      color = $basecol
      font = cambria
      letterHeight = 0.035
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $buttons_mapping
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    KeyboardComponent encoding_start_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine encoding_pre_fixation
    TextComponent encoding_pre_fix
      color = $basecol
      durationEstim = 1
      font = cambria
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 60
      text = +
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    PolygonComponent left_pre_square
      durationEstim = 1
      fillColor [set every repeat] = $bgcol
      lineColor [set every repeat] = $basecol
      pos = (-0.25, 0)
      saveStartStop = False
      shape = rectangle
      size = $(1/3, 1/4)
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 60
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    PolygonComponent right_pre_square
      durationEstim = 1
      fillColor [set every repeat] = $bgcol
      lineColor [set every repeat] = $basecol
      pos = (0.25, 0)
      saveStartStop = False
      shape = rectangle
      size = $(1/3, 1/4)
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 60
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  Routine encoding_rest
    CodeComponent encoding_rest_code
      Code Type = Auto->JS
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      Begin Routine:
        n_enc_trials = len(encoding_trials.trialList) * encoding_trials.nReps

        print("N enc trials: ", n_enc_trials)

        print(encoding_trials.thisTrialN)
        print("TRIAL_N = ", TRIAL_N)
      Each Frame:
        enc_rest_msg = "Completed " + str(TRIAL_N+1) + " of " + str(n_enc_trials) + " trials.\n\nPress [SPACE] to continue..."

        if (TRIAL_N > 0) and (TRIAL_N % (n_enc_trials / 2) == 0):
            print("Break time")
        #    enc_rest_msg = "Completed " + str(TRIAL_N) + " of 120 trials.\n\nPress [SPACE] to continue..."
            print(enc_rest_msg)
            continueRoutine = True
        else:
            print("Not break time")
        #    enc_rest_msg = ""
            continueRoutine = False
    TextComponent encoding_rest_text
      color [set every repeat] = $basecol
      font = cambria
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $enc_rest_msg
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    KeyboardComponent encoding_rest_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine encoding_trial
    CodeComponent encoding_trial_code
      Code Type = Auto->JS
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      Begin Routine:
        # Adjust the colour of the distractor based on its condition
        # Make it disappear when no distractor should be presented.
        print(dist_status)
        if dist_status == 'standard':
            distcol = basecol
        elif dist_status == 'salient':
            distcol = salientcol # set it to whatever salientcol is.
            print("Salient!:", distcol)
        else:
            # Setting it to win.color masks it
            distcol = bgcol
      End Routine:
        TRIAL_N = TRIAL_N + 1

        # Set the feedback
        print("Pressed: ", encoding_resp.keys)
        if encoding_resp.keys:
            feedback_msg="GOOD"
            feedback_col = good_feedback_col
        else:
            print("No response!!!")
            feedback_msg="TOO SLOW"
            feedback_col = slow_feedback_col
    TextComponent encoding_trial_fix_a
      color [set every repeat] = $basecol
      durationEstim = 0.4
      font = cambria
      letterHeight = 0.075
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 24
      text = +
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    PolygonComponent left_trial_square
      durationEstim = 3.5
      fillColor [set every repeat] = $bgcol
      lineColor [set every repeat] = $basecol
      pos = (-0.25, 0)
      shape = rectangle
      size [set every repeat] = $(1/3, 1/4)
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 210
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    PolygonComponent right_trial_square
      durationEstim = 3.5
      fillColor [set every repeat] = $bgcol
      lineColor [set every repeat] = $basecol
      pos = (0.25, 0)
      shape = rectangle
      size [set every repeat] = $(1/3, 1/4)
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 210
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    TextComponent encoding_cue
      color [set every repeat] = $basecol
      durationEstim = 0.35
      font = cambria
      letterHeight = 0.05
      startEstim = 0.4
      startVal [frame N] = 24
      stopVal [duration (frames)] = 21
      text [set every repeat] = $cue_stimulus
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    TextComponent encoding_fix_b
      color [set every repeat] = $basecol
      durationEstim = 2.75
      font = cambria
      letterHeight = 0.075
      startEstim = 0.75
      startVal [frame N] = 45
      stopVal [duration (frames)] = 165
      text = +
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    TextComponent encoding_target
      color [set every repeat] = $basecol
      durationEstim = 1.5
      font = cambria
      letterHeight = 0.05
      pos [set every repeat] = $(target_x, 0)
      startEstim = 1.2
      startVal [frame N] = 72
      stopVal [duration (frames)] = 150
      text [set every repeat] = $target_stimulus
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    TextComponent encoding_distractor
      color [set every repeat] = $distcol
      durationEstim = 1.5
      font = cambria
      letterHeight = 0.05
      opacity [set every repeat] = $dist_opacity
      pos [set every repeat] = $(-target_x, 0)
      startEstim = 1.2
      startVal [frame N] = 72
      stopVal [duration (frames)] = 150
      text [set every repeat] = $distractor_stimulus
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    KeyboardComponent encoding_resp
      allowedKeys = 'd', 'j'
      durationEstim = 2.3
      forceEndRoutine = False
      startEstim = 1.2
      startVal [frame N] = 72
      stopVal [duration (frames)] = 138
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  Routine encoding_practice_feedback
    CodeComponent encoding_feedback_code
      Code Type = Auto->JS
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      Each Frame:
        phase_id = encoding_file.split('_')[1] # real or practice


        if phase_id == 'practice':
            continueRoutine = True

        else:
            continueRoutine = False
    PolygonComponent left_feedback_square
      durationEstim = 1
      fillColor [set every repeat] = $bgcol
      lineColor [set every repeat] = $basecol
      pos = (-0.25, 0)
      shape = rectangle
      size [set every repeat] = $(1/3, 1/4)
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 60
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    PolygonComponent right_feedback_square
      durationEstim = 1
      fillColor [set every repeat] = $bgcol
      lineColor [set every repeat] = $basecol
      pos = (0.25, 0)
      shape = rectangle
      size [set every repeat] = $(1/3, 1/4)
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 60
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    TextComponent feedback_text
      color [set every repeat] = $feedback_col
      durationEstim = 1
      font = cambria
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 60
      text [set every repeat] = $feedback_msg
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  Routine retrieval_real_start
    CodeComponent retrieval_start_code
      Code Type = Auto->JS
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      Begin Routine:
        # RESTART THE TRIAL COUNTER
        TRIAL_N = 0
      Each Frame:
        if 'practice' in retrieval_file:
            continueRoutine = False
        else:
            continueRoutine = True
    TextComponent retrieval_start_txt
      color = $basecol
      font = cambria
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        You have finished the practice section. The main section is the same but your responses will be tracked.

        Press [SPACE] to begin the main section.
    TextComponent buttons_reminder_recognition
      color = $basecol
      font = cambria
      letterHeight = 0.025
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $buttons_mapping
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    KeyboardComponent retrieval_start_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine retrieval_pre_fixation
    TextComponent retrieval_pre_fix
      color = $basecol
      durationEstim = 1
      font = cambria
      letterHeight = 0.075
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 60
      text = +
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  Routine retrieval_rest
    CodeComponent retrieval_rest_code
      Code Type = Auto->JS
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      Begin Routine:
        n_ret_trials = len(retrieval_trials.trialList) * retrieval_trials.nReps

        print("N retrieval trials: ", n_ret_trials)

        print(retrieval_trials.thisTrialN)
        print("TRIAL_N = ", TRIAL_N)
      Each Frame:
        ret_rest_msg = "Completed " + str(TRIAL_N+1) + " of " + str(n_ret_trials) + " trials.\n\nPress [SPACE] to continue..."

        if (TRIAL_N > 0) and (TRIAL_N % (n_ret_trials / 3) == 0):
            print("Break time")
            print(ret_rest_msg)
            continueRoutine = True
        else:
            print("Not break time")

            continueRoutine = False
    TextComponent retrieval_rest_text
      color [set every repeat] = $basecol
      font = cambria
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $ret_rest_msg
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    KeyboardComponent retrieval_rest_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine retrieval_trial
    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        TRIAL_N = TRIAL_N + 1
    TextComponent recognition_probe
      color = $basecol
      durationEstim = 2
      font = cambria
      letterHeight = 0.1
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 120
      text [set every repeat] = $probe_stimulus
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    TextComponent retrieval_iti_fix
      color = $basecol
      durationEstim = 0.5
      font = cambria
      letterHeight = 0.075
      startEstim = 2
      startVal [frame N] = 120
      stopVal [duration (frames)] = 30
      text = +
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    KeyboardComponent recognition_resp
      allowedKeys = 'a','s','d','j','k','l'
      durationEstim = 2.5
      forceEndRoutine = False
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 150
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  Routine retrieval_iti
  Routine wm_study
    CodeComponent wm_trial_code
      Code Type = Auto->JS
    TextComponent wm_study_fix
      color [set every repeat] = $basecol
      durationEstim = 0.2
      font = cambria
      letterHeight = 0.05
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $study_frames
      text = +
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    PolygonComponent wm_loc1_study
      durationEstim = 0.2
      fillColor [set every repeat] = $study_clr1
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(rad*cos(0), rad*sin(0))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $study_frames
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    PolygonComponent wm_loc2_study
      durationEstim = 0.2
      fillColor [set every repeat] = $study_clr2
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(rad*cos(45), -rad*sin(45))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $study_frames
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    PolygonComponent wm_loc3_study
      durationEstim = 0.2
      fillColor [set every repeat] = $study_clr3
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(-rad*cos(45), -rad*sin(45))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $study_frames
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    PolygonComponent wm_loc4_study
      durationEstim = 0.2
      fillColor [set every repeat] = $study_clr4
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(-rad*cos(0), rad*sin(0))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $study_frames
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    PolygonComponent wm_loc5_study
      durationEstim = 0.2
      fillColor [set every repeat] = $study_clr5
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(-rad*cos(45), rad*sin(45))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $study_frames
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    PolygonComponent wm_loc6_study
      durationEstim = 0.2
      fillColor [set every repeat] = $study_clr6
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(rad*cos(45), rad*sin(45))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $study_frames
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  Routine wm_retention
    TextComponent wm_retention_fix
      color [set every repeat] = $basecol
      durationEstim = 1
      font = cambria
      letterHeight = 0.05
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = $retention_frames
      text = +
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    PolygonComponent wm_loc1_retention
      durationEstim = 1
      fillColor [set every repeat] = $bgcol
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(rad*cos(0), rad*sin(0))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $retention_frames
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    PolygonComponent wm_loc2_retention
      durationEstim = 1
      fillColor [set every repeat] = $bgcol
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(rad*cos(45), -rad*sin(45))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = $retention_frames
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    PolygonComponent wm_loc3_retention
      durationEstim = 1
      fillColor [set every repeat] = $bgcol
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(-rad*cos(45), -rad*sin(45))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $retention_frames
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    PolygonComponent wm_loc4_retention
      durationEstim = 1
      fillColor [set every repeat] = $bgcol
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(-rad*cos(0), rad*sin(0))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $retention_frames
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    PolygonComponent wm_loc5_retention
      durationEstim = 1
      fillColor [set every repeat] = $bgcol
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(-rad*cos(45), rad*sin(45))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $retention_frames
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    PolygonComponent wm_loc6_retention
      durationEstim = 1
      fillColor [set every repeat] = $bgcol
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(rad*cos(45), rad*sin(45))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $retention_frames
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  Routine wm_test
    CodeComponent wm_test_code
      Code Type = Auto->JS
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      End Routine:
        TRIAL_N = TRIAL_N + 1
    TextComponent wm_test_fix
      color [set every repeat] = $basecol
      durationEstim = 1.3
      font = cambria
      letterHeight = 0.05
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = $test_frames
      text = +
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    PolygonComponent wm_loc1_test
      durationEstim = 1.3
      fillColor [set every repeat] = $test_clr1
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(rad*cos(0), rad*sin(0))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $test_frames
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    PolygonComponent wm_loc2_test
      durationEstim = 1.3
      fillColor [set every repeat] = $test_clr2
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(rad*cos(45), -rad*sin(45))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $test_frames
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    PolygonComponent wm_loc3_test
      durationEstim = 1.3
      fillColor [set every repeat] = $test_clr3
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(-rad*cos(45), -rad*sin(45))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $test_frames
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    PolygonComponent wm_loc4_test
      durationEstim = 1.3
      fillColor [set every repeat] = $test_clr4
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(-rad*cos(0), rad*sin(0))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $test_frames
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    PolygonComponent wm_loc5_test
      durationEstim = 1.3
      fillColor [set every repeat] = $test_clr5
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(-rad*cos(45), rad*sin(45))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $test_frames
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    PolygonComponent wm_loc6_test
      durationEstim = 1.3
      fillColor [set every repeat] = $test_clr6
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(rad*cos(45), rad*sin(45))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $test_frames
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    KeyboardComponent wm_resp
      allowedKeys = 'd','j'
      durationEstim = 2.6
      forceEndRoutine = False
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = $test_frames*2
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    TextComponent wm_test_fix_end
      color [set every repeat] = $basecol
      durationEstim = 1.3
      font = cambria
      letterHeight = 0.05
      startEstim = 1.3
      startVal [frame N] = $test_frames
      stopVal [duration (frames)] = $test_frames
      text = +
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  Routine encoding_intro
    CodeComponent setup_code
      Code Type = Auto->JS
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      Begin Experiment:
        # To select version run files
        exp_version = str(expInfo['version'])

        # AVOIDING NUMPY
        bgcol = [-1,-1,-1]
        basecol = [0,0,0]
        distcol = basecol
        salientcol = [1,1,1]
        #

        # Apparently I need to change code in order to update the experiment to store on/off times

        distcol = basecol # default

        good_feedback_col = '#a6d854'
        slow_feedback_col = '#feb24c'

        enc_rest_msg = "" # initialise to empty str
        wm_rest_msg = ""
        ret_rest_msg = ""


        feedback_msg = ""
        feedback_col = basecol
    TextComponent encoding_intro_txt
      color [set every repeat] = $basecol
      font = cambria
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        SECTION 1 of 3

        Memory Encoding


        Press [SPACE] for instructions
    KeyboardComponent encoding_intro_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine wm_intro
    CodeComponent setup_code_2
      Code Type = Auto->JS
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      Begin Experiment:
        # To select version run files
        exp_version = str(expInfo['version'])

        # AVOIDING NUMPY
        bgcol = [-1,-1,-1]
        basecol = [1,1,1]
        distcol = basecol
        salientcol = [1,1,1]

        CLRS = {
            'X': bgcol,
            'RED': [1, -0.733333333333333, -0.756862745098039],
            'BLUE': [-0.843137254901961, -0.929411764705882, 0.568627450980392],
            'GREEN': [-1, 0.96078431372549, -0.976470588235294],
            'CYAN': [-0.843137254901961, 0.984313725490196, 1],
            'YELLOW': [0.984313725490196, 0.992156862745098, -0.835294117647059],
            'PURPLE': [1, -0.67843137254902, 1],
            'GREY': [-0.23921568627451, -0.411764705882353, -0.349019607843137],
            'BLACK': [-0.67843137254902, -0.584313725490196, -0.56078431372549],
        }

        # Apparently I need to change code in order to update the experiment to store on/off times

        distcol = basecol # default

        good_feedback_col = '#a6d854'
        slow_feedback_col = '#feb24c'

        enc_rest_msg = "" # initialise to empty str
        wm_rest_msg = ""
        ret_rest_msg = ""


        feedback_msg = ""
        feedback_col = basecol
    TextComponent wm_intro_txt
      color [set every repeat] = $basecol
      font = cambria
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        SECTION 2 of 3

        Change Detection


        Press [SPACE] for instructions
    KeyboardComponent wm_intro_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine retrieval_intro
    TextComponent retrieval_intro_txt
      color [set every repeat] = $basecol
      font = cambria
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        SECTION 3 of 3

        RECOGNITION MEMORY

        Press [SPACE] for instructions
    KeyboardComponent retrieval_intro_txt_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wm_rest
    CodeComponent wm_rest_code
      Code Type = Auto->JS
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      Begin Routine:
        n_wm_trials = len(wm_trials.trialList) * wm_trials.nReps

        print("N wm trials: ", n_wm_trials)

        print(wm_trials.thisTrialN)
        print("TRIAL_N = ", TRIAL_N)
      Each Frame:
        wm_rest_msg = "Completed " + str(TRIAL_N+1) + " of " + str(n_wm_trials) + " trials.\n\nPress [SPACE] to continue..."

        if (TRIAL_N > 0) and (TRIAL_N % (n_wm_trials / 3) == 0):
            print("Break time")
            print(wm_rest_msg)
            continueRoutine = True
        else:
            print("Not break time")

            continueRoutine = False
    TextComponent wm_rest_text
      color = $basecol
      font = cambria
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $wm_rest_msg
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    KeyboardComponent wm_rest_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine wm_real_start
    CodeComponent wm_start_code
      Code Type = Auto->JS
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      Begin Routine:
        # RESTART THE TRIAL COUNTER
        TRIAL_N = 0
      Each Frame:
        if 'practice' in wm_file:
            continueRoutine = False
        else:
            continueRoutine = True
    TextComponent wm_start_txt
      color = $basecol
      font = cambria
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        You have finished the practice section. The next section is the same but your responses will be tracked.

        Press [SPACE] to begin the main section.
    TextComponent buttons_reminder_wm
      color = $basecol
      font = cambria
      letterHeight = 0.035
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $buttons_mapping
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    KeyboardComponent wm_start_resp_real
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wm_pre_fixation
    TextComponent wm_pre_fix
      color = $basecol
      durationEstim = 1
      font = cambria
      letterHeight = 0.05
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 60
      text = +
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  Routine encoding_instructions_1
    CodeComponent enc_instr_pres1
      Code Type = Auto->JS
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      Each Frame:
        if int(expInfo['version']) == 1:
            buttons_mapping = "D (fits in box)\nJ (does not fit in box)"
            continueRoutine = True
            print("Version 1")
        else:
            buttons_mapping = "D (does not fit in box)\nJ (fits in box)"
            continueRoutine = False
            print("Version 2")
    TextComponent enc_instr_txt_1
      color [set every repeat] = $basecol
      font = cambria
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        You will see two boxes either side of a central fixation point. Words will appear and you will need to make judgements about them.

        First, a letter (L or R) will appear in the centre. This indicates whether you should direct your attention to the left box or to the right box. This is a 'cue'.

        A word will then appear either in both boxes or in just one box. Judge whether the item denoted by the cued word fits inside a shoe box or not:

        [D]: Does fit inside a shoe box
        [J]: Does not fit inside a shoe box

        If only one word appears, simply make your judgement about that word, regardless of whether the cue was correct.

        Press [SPACE] to do a practice run.
    KeyboardComponent enc_instr_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine encoding_instructions_2
    CodeComponent enc_istr_pres_2
      Code Type = Auto->JS
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      Each Frame:
        if int(expInfo['version']) == 2:
            buttons_mapping = "D (does not fit in box)\nJ (fits in box)"
            continueRoutine = True
            print("Version 2")
        else:
            buttons_mapping = "D (fits in box)\nJ (does not fit in box)"
            continueRoutine = False
            print("Version 1")
    TextComponent enc_instr_txt_2
      color [set every repeat] = $basecol
      font = cambria
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        You will see two boxes either side of a central fixation point. Words will appear and you will need to make judgements about them.

        First, a letter (L or R) will appear in the centre. This indicates whether you should direct your attention to the left box or to the right box. This is a 'cue'.

        A word will then appear either in both boxes or in just one box. Judge whether the item denoted by the cued word fits inside a shoe box or not:

        [D]: Does not fit in a shoe box
        [J]: Does fit inside a shoe box

        If only one word appears, simply make your judgement about that word, regardless of whether the cue is correct.

        Press [SPACE] to do a practice run.
    KeyboardComponent enc_instr_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wm_instructions_1
    CodeComponent wm_setup_code_1
      Code Type = Auto->JS
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      Begin Experiment:
        rad = 0.25 # radius = a quarter of the screen
        box_size = 0.1

        study_frames = 0.2 * 60
        retention_frames = 1 * 60
        test_frames = 1.3 * 60
        test_fix_frames = 2.3 * 60

        ## INITIAL COLOURS (DO NOT USE BECAUSE JS SUCKS!!!:
        #clrs = {'RED':np.array([255,36,28]),
        #       'GREEN':np.array([0, 248, 25]),
        #       'BLUE':np.array([0, 145, 255]),
        #       'YELLOW':np.array([255,251, 34]),
        #       'CYAN':np.array([0, 255, 255]),
        #       'PURPLE':np.array([255, 60, 255]),
        #       'WHITE':np.array([250, 250, 250])}

        ## The _ is to differentiate these from builtin color vars.
        #_RED = [1.0, -0.7176470588235294, -0.7803921568627451]
        #_GREEN = [-1.0, 0.9450980392156862, -0.803921568627451]
        #_BLUE = [-1.0, 0.13725490196078427, 1.0]
        #_YELLOW = [1.0, 0.968627450980392, -0.7333333333333334]
        #_CYAN = [-1.0, 1.0, 1.0]
        #_PURPLE = [1.0, -0.5294117647058824, 1.0]
        #_WHITE = [0.9607843137254901, 0.9607843137254901, 0.9607843137254901]
        #_X = bgcol
        #
        #
        #
        ## Seven colours plus a bacground blank colour (X). IF there's a change, the to-change slot's colour changes to the seventh.
        #all_colours = {"RED":_RED, "GREEN":_GREEN, "BLUE":_BLUE, "YELLOW":_YELLOW, "CYAN":_CYAN, "PURPLE":_PURPLE, "WHITE":_WHITE, 'X':_X}

        # Since these get set prior to reading in the file they need initializing
        # ... they get updated on each trial so the X is just filler.

        #study_clr1 = _X
        #study_clr2 = _X
        #study_clr3 = _X
        #study_clr4 = _X
        #study_clr5 = _X
        #study_clr6 = _X
        #
        #test_clr1 = _X
        #test_clr2 = _X
        #test_clr3 = _X
        #test_clr4 = _X
        #test_clr5 = _X
        #test_clr6 = _X
      Each Frame:
        if int(expInfo['version']) == 1:
            buttons_mapping = "D (change)\nJ (no change)"
            continueRoutine = True
            print("Version 1")
        else:
            buttons_mapping = "D (no change)\nJ (change)"
            continueRoutine = False
            print("Version 2")
    TextComponent wm_instr_txt_1
      color [set every repeat] = $basecol
      font = cambria
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        You will see a circular array of coloured squares.

        The colours will quickly disappear and then reappear after one second.

        When the colours reappear, they will either be identical or *one of the colours will have changed*.

        When they reappear, press [D] if there was a change, or press [J] if there was not a change.

        This is fast, so respond as quickly and accurately as possible.

        Press [SPACE] to begin.
    KeyboardComponent wm_start_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wm_instructions_2
    CodeComponent wm_setup_code_2
      Code Type = Auto->JS
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      Begin Experiment:
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      Each Frame:
        if int(expInfo['version']) == 2:
            buttons_mapping = "D (no change)\nJ (change)"
            continueRoutine = True
            print("Version 2")
        else:
            buttons_mapping = "D (change)\nJ (no change)"
            continueRoutine = False
            print("Version 1")
    TextComponent wm_instr_txt_2
      color [set every repeat] = $basecol
      font = cambria
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        You will see a circular array of coloured squares.

        The colours will quickly disappear and then reappear after one second.

        When the colours reappear, they will either be identical or *one of the colours will have changed*.

        When they reappear, press [J] if there was a change, or press [D] if there was not a change.

        This is fast, so respond as quickly and accurately as possible.

        Press [SPACE] to begin.
    KeyboardComponent wm_start_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine retrieval_instructions_1
    CodeComponent ret_setup_code_1
      Code Type = Auto->JS
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      Begin Experiment:
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      Each Frame:
        if int(expInfo['version']) == 1:
            buttons_mapping = "[A] definitely new\n[S] likely new\n[D] guess new\n[J] guess old\n[K] likely old\n[L] definitely old"
            continueRoutine = True
            print("Version 1")
        else:
            buttons_mapping = "[A] definitely old\n[S] likely old\n[D] guess old\n[J] guess new\n[K] likely new\n[L] definitely new"
            continueRoutine = False
            print("Version 2")
    TextComponent ret_instr_txt_1
      color = $basecol
      font = cambria
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        In this task you will see individual words. Judge whether you recognise each word. Some of them are "old" (you saw them during the first task) while others are "new" (you have not seen them in the first task).

        Indicate how familiar each word is by pressing one of the following keys:

        [A] definitely new
        [S] likely new
        [D] guess new
        [J] guess old
        [K] likely old
        [L] definitely old

        Using both hands on the keyboard, your left hand will be used to judge a word as "new" (keys [A][S][D]) and your right hand to judge as "old" (keys [J][K][L].

        Press [SPACE] to do a practice run.
    KeyboardComponent ret_instr_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine retrieval_instructions_2
    CodeComponent ret_setup_code_2
      Code Type = Auto->JS
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      Begin Experiment:
        rad = 0.25 # radius = a quarter of the screen
        box_size = 0.1



        study_frames = 0.2 * 60
        retention_frames = 1 * 60
        test_frames = 1.3 * 60
        test_fix_frames = 2.3 * 60

        ## INITIAL COLOURS (DO NOT USE BECAUSE JS SUCKS!!!:
        #clrs = {'RED':np.array([255,36,28]),
        #       'GREEN':np.array([0, 248, 25]),
        #       'BLUE':np.array([0, 145, 255]),
        #       'YELLOW':np.array([255,251, 34]),
        #       'CYAN':np.array([0, 255, 255]),
        #       'PURPLE':np.array([255, 60, 255]),
        #       'WHITE':np.array([250, 250, 250])}

        ## The _ is to differentiate these from builtin color vars.
        #_RED = [1.0, -0.7176470588235294, -0.7803921568627451]
        #_GREEN = [-1.0, 0.9450980392156862, -0.803921568627451]
        #_BLUE = [-1.0, 0.13725490196078427, 1.0]
        #_YELLOW = [1.0, 0.968627450980392, -0.7333333333333334]
        #_CYAN = [-1.0, 1.0, 1.0]
        #_PURPLE = [1.0, -0.5294117647058824, 1.0]
        #_WHITE = [0.9607843137254901, 0.9607843137254901, 0.9607843137254901]
        #_X = bgcol
        #
        #
        #
        ## Seven colours plus a bacground blank colour (X). IF there's a change, the to-change slot's colour changes to the seventh.
        #all_colours = {"RED":_RED, "GREEN":_GREEN, "BLUE":_BLUE, "YELLOW":_YELLOW, "CYAN":_CYAN, "PURPLE":_PURPLE, "WHITE":_WHITE, 'X':_X}

        # Since these get set prior to reading in the file they need initializing
        # ... they get updated on each trial so the X is just filler.

        #study_clr1 = _X
        #study_clr2 = _X
        #study_clr3 = _X
        #study_clr4 = _X
        #study_clr5 = _X
        #study_clr6 = _X
        #
        #test_clr1 = _X
        #test_clr2 = _X
        #test_clr3 = _X
        #test_clr4 = _X
        #test_clr5 = _X
        #test_clr6 = _X
      Each Frame:
        if int(expInfo['version']) == 2:
            buttons_mapping = "[A] definitely old\n[S] likely old\n[D] guess old\n[J] guess new\n[K] likely new\n[L] definitely new"
            continueRoutine = True
            print("Version 2")
        else:
            buttons_mapping = "[A] definitely new\n[S] likely new\n[D] guess new\n[J] guess old\n[K] likely old\n[L] definitely old"
            continueRoutine = False
            print("Version 1")
    TextComponent ret_instr_txt_2
      color = $basecol
      font = cambria
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        In this task you will see individual words. Judge whether you recognise each word. Some of them are "old" (you saw them during the first task) while others are "new" (you have not seen them in the first task).

        Indicate how familiar each word is by pressing one of the following keys:

        [A] definitely old
        [S] likely old
        [D] guess old
        [J] guess new
        [K] likely new
        [L] definitely new

        Using both hands on the keyboard, your left hand will be used to judge a word as "old" (keys [A][S][D]) and your right hand to judge as "new" (keys [J][K][L]).

        Press [SPACE] to do a practice run.
    KeyboardComponent ret_instr_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_of_study
    TextComponent end_study_text
      color = $basecol
      durationEstim = 2.5
      font = cambria
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        END OF STUDY

        Thank You!
Flow
  Routine wm_intro
  Routine wm_instructions_1
  Routine wm_instructions_2
  LoopInitiator wm_runs loopType="TrialHandler"
    conditionsFile = $"protocol/wm_main_" + exp_version + ".xlsx"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine wm_real_start
    Routine wm_pre_fixation
    LoopInitiator wm_trials loopType="TrialHandler"
      conditionsFile = $"protocol/" + wm_file
      loopType = random
      nReps = 2
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      Routine wm_rest
      Routine wm_study
      Routine wm_retention
      Routine wm_test
    LoopTerminator wm_trials
  LoopTerminator wm_runs
  Routine end_of_study
